PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'Prolific ID*': '', 'Gender (1 = Male, 2 = Female, 3 = Others)*': '', 'Age*': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = exp2_nn
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Routines
  Routine Intro
    TextComponent text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        **WELLCOME**

        Thank you for participating in this experiment!
        This is a memory test.
        Each step will be explained as you proceed.

        IMPORTANT:
        1. Please refrain from taking notes. Your honest response matters a lot to us.
        2. Please use headphone during this experiment. Background noise will affect your result in this test (If you are listening to some music, or do not have headphones on, we hereby gently ask you to stop the music and keep your headphone on while you do this task)
        3. You are asked at some part of the task to go on a 5 minutes break before you proceed, that 5 minutes of rest is mandatory and is included in the duration of the task and hence the payments; so please use it!

        Press enter to proceed!
    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Consent
    ImageComponent image
      image = consent (1).jpg
      pos = (-0.40, 0)
      size = (1,1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = icon
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent icon
      fillColor = white
      pos = (0.6, -0.40)
      saveStartStop = False
      shape = cross
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Nice job!
        This was the first part of the study.

        Now, you will see a star on the screen and then you will hear a list of words.
        Please try to listen carefully to them.


        Press space when you are ready to go.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine star
    PolygonComponent polygon
      fillColor = white
      saveStartStop = False
      shape = star
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine wordrecall
    SoundComponent sound_1
      saveStartStop = False
      sound = test voices/WORD RECALL NO NOISE.mp3
      startVal [time (s)] = 0.0
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  Routine Instroct1
    TextComponent text_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Well done!

        Now try to remember as many of those words that you just heard as possible.
        The order of the words does not matter.
        Just try to remember them and write them down.

        Start typing the words you remember after the star disappeared on the screen. Please just leave a space between each word you write down. No uppercase needed

        "IMPORTANT: Press enter only when you finished writing all the words you remembered. Pressing enter while typing will terminate your response"

        Press enter when you are ready
    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response1
    TextComponent text1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        modify = false;
        text1.text = '';
      Begin Routine:
        text1.text = ''
        event.clearEvents('keyboard')
        disp_warning = False
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text1.text = text1.text + ' '
            elif 'backspace' in keys:
                text1.text = text1.text[:-1]
            elif 'return' in keys:
                continueRoutine = False
            else:
                text1.text = text1.text + keys[0]
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            text1.text = text1.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                text1.text = text1.text + textAdd.toUpperCase();
                modify = false;
            } else {
                text1.text = text1.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("words", text1.text)
        text1.setText('')  // empty the onscreen text ready for next input
      End Routine:
        thisExp.addData("words", text1.text)
  Routine intro1
    TextComponent text_4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thanks for staying with us!

        Now you will hear some short lists of digits.
        try to remember them in the opposite order.

        For example, if you heard 1, 2, 3, write it down as  321! No space is needed.

        Write down your answer after you see an star on the screen and press enter when you have typed your response.
        First lets have a practice trial to get to know how it works.
        Good luck!

        Press space to proceed!
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine ready_
    TextComponent text_5
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Sound will be played now
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  Routine practice
    SoundComponent sound_2
      saveStartStop = False
      sound = test voices/3 digit.mp3
      startVal [time (s)] = 0.0
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  Routine responce
    TextComponent text6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        modify = false;
        text6.text = '';
      Begin Routine:
        text6.text = ''
        event.clearEvents('keyboard')
        disp_warning = False
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text6.text = text6.text + ' '
            elif 'backspace' in keys:
                text6.text = text6.text[:-1]
            elif 'return' in keys:
                continueRoutine = False
            else:
                text6.text = text6.text + keys[0]
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            text6.text = text6.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                text6.text = text6.text + textAdd.toUpperCase();
                modify = false;
            } else {
                text6.text = text6.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("practice", text6.text)
        text6.setText('')  // empty the onscreen text ready for next input
      End Routine:
        thisExp.addData("practice", text6.text)
  Routine pract_end
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        That's it!

        Hopefully you wrote 273 as your response.
        But if not, it is ok. This was just a practice.
        Now the real test begins...

        Press space when you are ready to go.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine wm
    SoundComponent sound_3
      saveStartStop = False
      sound [set every repeat] = $sounds
      startVal [time (s)] = 0.0
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  Routine resp2
    TextComponent text7
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        modify = false;
        text7.text = '';
      Begin Routine:
        text7.text = ''
        event.clearEvents('keyboard')
        disp_warning = False
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text7.text = text7.text + ' '
            elif 'backspace' in keys:
                text7.text = text7.text[:-1]
            elif 'return' in keys:
                continueRoutine = False
            else:
                text7.text = text7.text + keys[0]
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            text7.text = text7.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                text7.text = text7.text + textAdd.toUpperCase();
                modify = false;
            } else {
                text7.text = text7.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("WM", text7.text)
        text7.setText('')  // empty the onscreen text ready for next input
      End Routine:
        thisExp.addData("WM", text7.text)
  Routine feedback
    TextComponent text_7
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Response recorded.
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  Routine rest
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Half of the experiment is already done.

        Now you are kindly asked to leave the experiment here for five minutes before you proceed to the next page.
        The task is time sensitive and proceeding before the proper time has passes will result in the invalidity of the acquired data.

        Press enter to proceed!
    KeyboardComponent key_resp_8
      allowedKeys = 'return'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent text9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Wellcome back!

        Do you still remember the words that you heard some minutes ago?
        In the next page please write as many of them as you remember the same way you did before.

        Press enter to go
    KeyboardComponent key_resp_6
      allowedKeys = 'return'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine resp3
    TextComponent text_9
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Both
      Begin JS Routine:
        modify = false;
        text_9.text = '';
      Begin Routine:
        text_9.text = ''
        event.clearEvents('keyboard')
        disp_warning = False
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text_9.text = text_9.text + ' '
            elif 'backspace' in keys:
                text_9.text = text_9.text[:-1]
            elif 'return' in keys:
                continueRoutine = False
            else:
                text_9.text = text_9.text + keys[0]
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            text_9.text = text_9.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                text_9.text = text_9.text + textAdd.toUpperCase();
                modify = false;
            } else {
                text_9.text = text_9.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("words2", text_9.text)
        text1.setText('')  // empty the onscreen text ready for next input
      End Routine:
        thisExp.addData("words2", text_9.text)
  Routine text_10
    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you very much!

        Now lets go to the last part of the task.
        Again you will hear a list of words and you will be asked to recognize some of them later on. You do not have to memorize them. Just listen carefully.

        Press space to begin.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wordrecog
    SoundComponent sound_4
      saveStartStop = False
      sound = test voices/WORD RECOGNITION NO NOISE.mp3
      startVal [time (s)] = 0.0
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  Routine recg_answ
    TextComponent text_12
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $words
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    KeyboardComponent key_resp_9
      allowedKeys = 'y','n'
      correctAns = $corans
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Instructs
    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Nice job!

        In the next page each time a word will be presented on the screen.
        If that is one of the words you just heard press 'y' button on the keyboard and if not press 'n' button.

        Good luck!

        Press space to proceed.
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine the_end
    TextComponent text_14
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation in this task.
        Wish to see you in our future studies.

        Good luck and stay safe!
        Your completion code is:
         1111

        Please do not press enter before you write it down somewhere.

        Press enter to finish the task.
    KeyboardComponent key_resp_11
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Intro
  Routine Consent
  Routine response1
  Routine intro1
  Routine ready_
  Routine practice
  Routine star
  Routine responce
  Routine feedback
  Routine pract_end
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = WM1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'sounds': 'test voices/4 digit.mp3'},
      {'sounds': 'test voices/5 digit.mp3'},
      {'sounds': 'test voices/6 digit.mp3'},
      {'sounds': 'test voices/7 digit.mp3'},
      {'sounds': 'test voices/8 digit.mp3'}]
    Routine ready_
    Routine wm
    Routine star
    Routine resp2
    Routine feedback
  LoopTerminator trials
  Routine Instructions
  Routine star
  Routine wordrecall
  Routine Instroct1
  Routine response1
  Routine rest
  Routine instructions
  Routine resp3
  Routine text_10
  Routine star
  Routine wordrecog
  Routine Instructs
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = wordrecognition_final.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'words': 'Later', 'corans': 'y', 'category': 'MLP'},
      {'words': 'Finger', 'corans': 'n', 'category': 'extra'},
      {'words': 'Sizzle', 'corans': 'n', 'category': 'extra'},
      {'words': 'Copper', 'corans': 'y', 'category': 'FHP'},
      {'words': 'Velvet', 'corans': 'y', 'category': 'FHP'},
      {'words': 'Pocket', 'corans': 'y', 'category': 'MHP'},
      {'words': 'Beetle', 'corans': 'n', 'category': 'extra'},
      {'words': 'Habit', 'corans': 'y', 'category': 'FHP'},
      {'words': 'Water', 'corans': 'n', 'category': 'extra'},
      {'words': 'Buffet', 'corans': 'y', 'category': 'FLP'},
      {'words': 'Temple', 'corans': 'n', 'category': 'extra'},
      {'words': 'Bottle', 'corans': 'y', 'category': 'MHP'},
      {'words': 'Humid', 'corans': 'n', 'category': 'extra'},
      {'words': 'Rumble', 'corans': 'y', 'category': 'FLP'},
      {'words': 'Babble', 'corans': 'y', 'category': 'MHP'},
      {'words': 'Solid', 'corans': 'n', 'category': 'extra'},
      {'words': 'Hammer', 'corans': 'n', 'category': 'extra'},
      {'words': 'Fisher', 'corans': 'y', 'category': 'MHP'},
      {'words': 'Final', 'corans': 'n', 'category': 'extra'},
      {'words': 'Angle', 'corans': 'n', 'category': 'extra'},
      {'words': 'Filter', 'corans': 'y', 'category': 'MLP'},
      {'words': 'Parcel', 'corans': 'n', 'category': 'extra'},
      {'words': 'Circle', 'corans': 'y', 'category': 'FLP'},
      {'words': 'Nectar', 'corans': 'y', 'category': 'FHP'},
      {'words': 'Panel', 'corans': 'n', 'category': 'extra'},
      {'words': 'Farmer', 'corans': 'n', 'category': 'extra'},
      {'words': 'Rumor', 'corans': 'y', 'category': 'MLP'}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
    Routine recg_answ
  LoopTerminator trials_2
  Routine the_end
